PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = misty_py
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instructions
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    TextComponent intstructs
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please answer the following artimetic questions to the best of your ability.

        You will be measured on both speed and accuracy.

        To ensure that we can use your results and complete our research we need you to perform at the level of your peers (indicated by the red arrow)

        Good luck!

        Press space to start
    KeyboardComponent space_to_cont
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sum_routine1
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import itertools
        import numexpr
        import eq_gen
        class eqGenTools(object):
            def __init__(self, diff, intQty=0, ops=0):
                self.intQty = intQty #this refers to how many integers you want to create
                self.ops = ops
            def intTool(self, intQty, diff): #creates a dictionary and fills it with integ values
                self.intDic=[]
                if diff == "med2":
                    integers = [9,9,99,99]
                    random.shuffle(integers)
                    self.ops = ('*', '-', '*')
                elif diff == "med1":
                    integers = [9,9,9,9]
                    self.ops = ('+', '-', '*')
                elif diff =="easy1":
                    integers = [9,9]
                    self.ops = ('+','-')
                elif diff == "easy2":
                     integers = [9,9,9]
                     self.ops = ('+', '-')
                elif diff == "hard":
                    integers = [99,99,99,99]
                    self.ops = ('+','-','/','*')
                self.intQty = len(integers)

                for i, val in enumerate(integers):
                        num = range(1,integers[i])
                        temp = float(random.choice(num))
                        self.intDic.append(temp)


            def optGenTool(self, ops):
                self.opDic=[]
                temp = 0
                for i in range(0,(self.intQty-1)):
                     temp = str(random.choice(self.ops))
                     self.opDic.append(temp)

            def eqGenerator(self, dictlist, optlist):

                while True:
                    self.intTool(self.intQty, self.diff)
                    self.equation = [x for x in itertools.chain.from_iterable(itertools.zip_longest(self.intDic,self.opDic, fillvalue=''))]
                    self.equation = ' '.join(str(e) for e in self.equation)

                    if ("/0" not in self.equation):
                        break
                self.ans = eval(self.equation)

        class MISTEasy1(eqGenTools):
            def __init__(self, ans=0, equation=0, diff="med", intQty=0, opQty=0, ops=0, dictlist=[], optlist=[]):
                eqGenTools.__init__(self, diff, intQty, opQty)
                self.equation = equation
                self.ans = ans
                self.diff = diff
                self.intQty = intQty
                self.ops = ops

            def EasyOps1(self):
                while True:
                    self.intTool(self.intQty, self.diff)
                    self.optGenTool(self.ops)
                    self.eqGenerator(self.intDic, self.opDic)
                    if ((float(self.ans).is_integer()) and (self.ans>=0) and (self.ans <=9)):
                        self.equation = self.equation.replace('.0','')
                        self.ans = str(self.ans).replace('.0','')
                        break

        usrAvg = 0
        msg = ""
        eq = ""
        corCount = 0
        inCorCount = 0
        meanRT = []
        time = 10
        totalCor = 0
        difficulty = "easy1"
        timeCoef = 1
      Begin Routine:
        msg = ""
        timer = core.CountdownTimer(time)
        x = MISTEasy1( diff = difficulty)
        x.EasyOps1()
        eq = "%s = ?" %(x.equation)
        ans = int(x.ans)
        timeout = False
      Each Frame:
        if timer.getTime() <= 0:
            continueRoutine = False
            timeout = True
      End Routine:
        if slider.getRating() == ans:
                msg = "Correct"                #For correct trials add one to
                corCount = corCount + 1       #correct counter
                totalCor=totalCor + 1           #and total correct.
                #usrAvg = usrAvg - 0.05         #increase userAverage pointer by 0.05
        elif (timeout == True):
            msg = "Time-Out"
            if corCount > 0:
                corCount = 0 #combo-breakakaka
            corCount -= 1
            usrAvg= usrAvg+0.1

        elif (slider.getRating() != ans): #For incorrect answers
            msg = type(this_ans)
            if corCount > 0:
                corCount = 0
            corCount -= 1 # minus one from correct counter
            usrAvg = usrAvg + 0.1 #add 0.1 to userAverage pointer (1-userAv)


        if slider.getRT() == None:
            RT = time
        else:
            RT = slider.getRT()

        if corCount == 3: #every 3 correct answers reduces the mean time by 10%
            timeCoef = (timeCoef * 0.9)
            corCount = 0 #resets the counter

        if corCount == -3: #every three incorrect answers
            timeCoef = (timeCoef / 0.9) #time is increased by 10%
            corCount = 0 #resets counter

        if totalCor < 5: #Sets difficulty of sums at four steps
            difficulty = "easy1" #just +- sums, 2 integers 0-9
        elif totalCor == 5:
            difficulty = "easy2" #just +- sums, 3 integers 0-9
        elif totalCor == 10:
            difficulty = "med1" # +-* sums, 3 integers 0-9
        elif totalCor == 15:
            difficulty = "med2" # +-* sums, 3 integers 0-99
        elif totalCor == 20:
            difficulty = "hard" # +-/* sums, 3 integers 0-99

        #print(corCount)
        #print(time)

        meanRT.append(RT)
        time = np.mean(meanRT) * timeCoef

        if usrAvg >= 1.8:
            usrAvg = 1.8
    ProgressComponent prog
      anchor = top-left
      borderColor = white
      color = $(1.0000, -1.0000, -1.0000)
      fillColor = $(-1.0000, 0.5373, -1.0000)
      lineWidth = 4
      pos = (-0.5, 0.5)
      progress [set every frame] = $0 + (timer.getTime()/time)
      size = (1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent greenbar
      anchor = center-left
      fillColor = $(-1.0000, 0.0039, -1.0000)
      pos = (1/3, 0.7)
      shape = rectangle
      size = (2/3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent yellowbar
      anchor = center-left
      fillColor = $(1.0000, 1.0000, -1.0000)
      pos = (-1/3, 0.7)
      shape = rectangle
      size = (2/3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent redbar
      anchor = center-left
      fillColor = $(1.0000, -1.0000, -1.0000)
      pos = (-1, 0.7)
      shape = rectangle
      size = (2/3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent arrow
      fillColor = white
      pos [set every repeat] = $(1-usrAvg, 0.6)
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      text [set every repeat] = $eq
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    SliderComponent slider
      color = $(-1.0000, 0.0039, 0.0039)
      fillColor = $(1.0000, -0.4588, -1.0000)
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      styles = choice
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
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  Routine feedback
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine sum_routine1
    Routine feedback
  LoopTerminator trials
